PsychoPy2experiment version="2024.2.5"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Completed URL = https://app.prolific.com/submissions/complete?cc=CD8Z6Z7K
  Data filename = u'data/%s_%s_%s' % (expInfo['PROLIFIC_PID'], expName, expInfo['date'])
  End Message = Gracias por su participación. Por favor, no cierre esta ventana. Será redirigido automáticamente a Prolific.
  Experiment info = {'PROLIFIC_PID': '', 'STUDY_ID': '', 'SESSION_ID': ''}
  Force stereo = False
  Full-screen window = True
  Incomplete URL = https://app.prolific.com/submissions/complete?cc=C3OM2BE9
  Monitor = testMonitor
  Resources = ['trials_list0.xlsx', 'trials_list1.xlsx', 'trials_list2.xlsx', 'trials_list3.xlsx', 'instructionsNW.xlsx', 'instructionsWN.xlsx', 'genderflanker_practice.xlsx', 'keyboardresponseNW.png', 'keyboardresponseWN.png', 'touchresponseNW.png', 'touchresponseWN.png', 'instructions_after_practice.xlsx', 'trials_list_practice.xlsx', 'default.png']
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 2024.2.5
  Window size (pixels) = [1512, 982]
  blendMode = add
  color = $[1.000,1.000,1.000]
  expName = Tarea de decisión léxica
  exportHTML = on Save
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Instructions
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    TextComponent instructions
      color = black
      font = Courier New
      letterHeight = .035
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_text
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    KeyboardComponent instr_done_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent instr_done_button
      fillColor = white
      lineColor = black
      pos = (0, -.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instr_done_label
      color = black
      font = Courier New
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Continuar
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    MouseComponent instr_done_touch
      clickable = instr_done_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_JS
      Code Type = Both
      Begin JS Experiment:
        // Some shortcuts to make auto-conversion from Python easier
        // from https://docs.google.com/document/d/13jp0QAqQeFlYSjeZS0fDInvgaDzBXjGQNe4VNKbbNHQ/edit?pli=1#

        //console.log("Resolution: ", psychoJS.window.size[0], "x", psychoJS.window.size[1])

        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;

        //round = function(num, n=0) {
        //    return +(Math.round(num + ("e+" + n))  + ("e-" + n));
        //}


        randint = function(min, maxplusone) {
          return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }
    ImageComponent instructions_image
      image [set every repeat] = $instruct_image
      pos = (0, -.15)
      size = (0.6, 0.3)
      startVal [condition] = $has_image==1
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    ImageComponent instructions_image_touch
      image [set every repeat] = $instruct_image
      ori [set every repeat] = 0
      pos = (0, -.15)
      size = (0.6, 0.3)
      startVal [condition] = $has_image==2
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    CodeComponent select_instruction_images
      Code Type = Auto->JS
  Routine End
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    TextComponent thank_you_bye
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Este es el final del experimento. Le agradecemos su participación. Para recibir su compensación, por favor, NO cierre esta ventana hasta que haya sido redirigido a la página de Prolific.

        ¡Muchas gracias por su participación!
  Routine feedback
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    TextComponent target_feedback
      color = black
      durationEstim = 0.5
      font = Courier New
      letterHeight = .1
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $feedback_duration
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      text [set every repeat]:
        |

        |
    CodeComponent set_feedback
      Code Type = Auto->JS
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      Begin Experiment:
        msg = "No feedback message set yet"
      Begin Routine:
        if corr == -1:
            msg="¡Muy lento!"
            feedback_color = "black"
            feedback_duration = .5
            # the following only for
            # super fast testing
            # feedback_duration = .001
        else:
            if TrialID < 3000: #all trials
                feedback_duration = .5
                if corr:
                    msg="✓"
                    feedback_color = "green"
                else:
                     msg="✕"
                     feedback_color = "red"
            else:
                # just end this routine if it's not a practice trial
                feedback_duration = 0
    TextComponent feedback_text
      color [set every repeat] = $feedback_color
      durationEstim = .5
      font = Courier New
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_duration
      text [set every repeat] = $msg
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    PolygonComponent button_left_2
      durationEstim = .5
      fillColor = white
      lineColor = black
      pos = (-.4, -.3)
      shape = rectangle
      size = (0.4, 0.2)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $feedback_duration
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    PolygonComponent button_right_2
      durationEstim = .5
      fillColor = white
      lineColor = black
      pos = (0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $feedback_duration
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    TextComponent trial_label_left_2
      color = black
      durationEstim = .5
      font = Courier New
      letterHeight = 0.04
      pos = (-.4, -.3)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $feedback_duration
      text [set every repeat] = $trial_label_left_text
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    TextComponent trial_label_right_2
      color = black
      durationEstim = .5
      font = Courier New
      letterHeight = .04
      pos = (0.4, -0.3)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $feedback_duration
      text [set every repeat] = $trial_label_right_text
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  Routine setInstructionText
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    CodeComponent set_instruction_text
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text = "In this task you will judge whether a string of letters forms a word or not (i.e., is a nonword).\nLook at the cross at the start of each trial. After a second, a string of letters will appear. Your task is to indicate if the letter string forms a word or not (i.e., if it is a nonword). If your device has a keyboard, press the left arrow key for nonwords and the right arrow key for words. If your device does not have a keyboard, touch the left button on the screen for nonwords and the right button for words. Do not use the mouse as this will slow down your response.\nIt is very important that you respond as quickly and accurately as possible, as each letter string will only be on the screen for two seconds. If you do not respond within this time, the message 'Too slow!' will be displayed and the experiment will progress to the next letter string.\nThe first 20 trials will be practice trials and you will receive feedback on your answers.\n\nPress the space bar or touch the button below to continue."
  Routine prepareTrialsExperiment
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    CodeComponent pick_conditions_file
      Code Type = Auto->JS
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      Begin Routine:
        # if participant number is odd, use condition 1, otherwise 0
        conditions_file = "experimental_trials_cond_"+str(int(expInfo['participant'])%2)+".xlsx"
  Routine setInstructionTextExperiment
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    CodeComponent set_instruction_text_experiment
      Code Type = Auto->JS
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      Begin Routine:
        instruction_text = "You have completed the practice trials. During the experimental trials, you will not receive feedback, but it is very important that you respond as quickly and accurately as possible.\nBefore you begin, please ensure that you are in a comfortable and quiet location and will not be disturbed for about 10 minutes, as the experiment cannot be paused and we cannot use your data if you do not complete all the trials.\n When you are ready to start the experimental trials, please press space or touch the button below."
  Routine timingFeedback
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    CodeComponent prepare_timing_feedback
      Code Type = Auto->JS
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      Begin Routine:
        if corr == -1:
            feedback_duration = 0.5
        else:
            feedback_duration = 0
    TextComponent timing_feedback
      durationEstim = .5
      font = vera
      letterHeight = 0.1
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_duration
      text = ¡Demasiado lento!
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  Routine Break
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    CodeComponent break_code
      Code Type = JS
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      Begin JS Experiment:
        // do 161 so we don't break on the very last trial
        // this way, we'll break at 161, 322 and then the experiment finishes
        break_every = 161;
        break_msg_top = "";
        break_msg_middle = "Puede hacer un breve descanso.\n";
        break_msg_bottom = "Pulse cualquier tecla para seguir con el experimento.";
        break_msg = "";

        trials_presented_so_far = 0
      Begin JS Routine:
        trials_presented_so_far++

        break_msg_top = (("PAUSA\n\nHa terminado el " + round(((trials_presented_so_far / experiment_trials.nTotal) * 100)).toString()) + "% del experimento. ");
        break_msg = ((break_msg_top + break_msg_middle) + break_msg_bottom);
        show_break = trials_presented_so_far % break_every == 0
        //console.log(trials_presented_so_far)
        //console.log(experiment_trials.nRemaining)
        //console.log(show_break)
      Each JS Frame:
        // exit the break routine immediately if we are not on a break trial
        // break trials occur every break_every trials (see Begin Experiment)

        if (!show_break) {
            continueRoutine = false;
        }
    TextComponent break_text
      color = black
      font = Courier New
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $break_msg
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    MouseComponent break_done_touch
      clickable = break_done_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    KeyboardComponent break_done_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent break_done_button
      fillColor = white
      lineColor = black
      pos = (0, -.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent break_done_button_label
      color = black
      font = Courier New
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Continuar
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  Routine show_image
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    ImageComponent instruction_image
      image [set every repeat] = $instruct_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse
      clickable = instruction_image
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent show_image_code
      Code Type = JS
      Each JS Frame:
        // exit the routine immediately if this page does not have an image

        if (has_image == 0){
            continueRoutine = false;
        }
  Routine presentTrial
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    CodeComponent settings_and_cond
      Code Type = JS
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      Begin JS Experiment:
        dpi_scaling = 1;
        font_scale = 1.5;
        fixation_height = 0.1;
        text_height = 0.1;
        arrow_keys_height = 0.05;

        window.expInfo = expInfo

        // counterbalancing determined in check_prescreening_counterbalancing routine
        thisExp.addData("counterbalancing_condition", counterbalancing_condition);
        trial_list_file = (("trials_list" + counterbalancing_condition.toString()) + ".xlsx");
        mask_duration = 0.5;
        trial_timeout = 2;
        // the following only for super fast testing
        //mask_duration = 0.001
        // trial_timeout = 0.002
        combined_string = "";
      Begin JS Routine:
        if (word_left) {
            trial_label_left_text = "A = Palabra";
            trial_label_right_text = "L = No palabra";
            if (StimulusType === "WORD"){
                corrAns = "a";
            } else {
                corrAns = "l";
            }
        } else {
            trial_label_left_text = "A = No palabra";
            trial_label_right_text = "L = Palabra";
            if (StimulusType === "NOWORD"){
                corrAns = "a";
            } else {
                corrAns = "l";
            }
        }

        prime_duration_s = (PrimeDuration / 1000);
        target_onset = (mask_duration + prime_duration_s);
        button_duration = (target_onset + trial_timeout);
        // Combina flanker y target
        if (Condition === "AGR" || Condition === "DIS") {
            combined_string = `${Flanker} ${Prime} ${Flanker}`;
        } else {
            combined_string = `${Flanker}${Prime}${Flanker}`;
        }
    TextComponent fixation_mask
      color = black
      durationEstim = 0.5
      font = Courier New
      letterHeight = 0.1
      pos = (0, 1)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $mask_duration
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      text [set every repeat]:
        |

        |
    TextComponent target
      color = black
      durationEstim = 5.556
      font = Courier New
      letterHeight = .1
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $trial_timeout
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      text:
        |

        |
    TextComponent prime_text
      color = black
      durationEstim = .056
      font = Courier New
      letterHeight = 0.1
      startEstim = .5
      startVal [time (s)] = $mask_duration
      stopVal [duration (s)] = $prime_duration_s
      text [set every repeat] = $combined_string
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    KeyboardComponent response
      allowedKeys = 'a', 'l'
      correctAns = $corrAns
      durationEstim = 5
      forceEndRoutine = True
      startEstim = .556
      startVal [time (s)] = $target_onset
      stopVal [duration (s)] = $trial_timeout
      storeCorrect = True
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    PolygonComponent button_left
      durationEstim = 5.556
      fillColor = white
      lineColor = black
      pos = (-.4, -.3)
      shape = rectangle
      size = (0.4, 0.2)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $button_duration
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    PolygonComponent button_right
      durationEstim = 5.556
      fillColor = white
      lineColor = black
      pos = (0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $button_duration
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    TextComponent trial_label_right
      color = black
      durationEstim = 5.556
      font = Courier New
      letterHeight = .04
      pos = (0.4, -0.3)
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $button_duration
      text [set every repeat] = $trial_label_right_text
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    MouseComponent touch_resp
      clickable = button_left, button_right
      disabled = True
      durationEstim = 5
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startEstim = .556
      startVal [time (s)] = $target_onset
      stopVal [duration (s)] = $trial_timeout
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    CodeComponent check_correct
      Code Type = Both
      Each JS Frame:
        if ((frameN > 10)) {
                if ((! psychoJS.window._windowAlreadyInFullScreen)) {
                    alert("You exited full screen mode. The experiment will now terminate.");
                    quitPsychoJS("Experiment aborted since full screen mode was exited.");
                    }
                }
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (response.keys) {
            corr = response.corr;
            rt = response.rt;
        //} else {
        //    if ((typeof touch_resp !== undefined) & (typeof touch_resp.clicked_name[0] !== undefined)) {
        //        rt = touch_resp.time[0];
        //        if (((_pj.in_es6("left", touch_resp.clicked_name[0]) && (corrAns === "a")) || (_pj.in_es6("right", touch_resp.clicked_name[0]) && (corrAns === "l")))) {
        //            corr = 1;
        //        } else {
        //            corr = 0;
        //        }
            } else {
                corr = (- 1);
            }
        //}
        psychoJS.experiment.addData("rt", rt);
        psychoJS.experiment.addData("corr", corr);
      End Routine:
        # check if correct (either mouse or keyboard)
        if response.keys:
            corr = response.corr
            rt = response.rt
        elif touch_resp.clicked_name[0] != undefined:
            rt = touch_resp.time[0]  # annoyingly mouse is a list of rts
            if (('left' in touch_resp.clicked_name[0] and corrAns=='a') or
                ('right' in touch_resp.clicked_name[0] and corrAns=='l')):
                corr = 1
            else:
                corr = 0
        else:
            corr = -1

        thisExp.addData('rt',  rt)
        thisExp.addData('corr', corr)
    TextComponent trial_label_left
      color = black
      durationEstim = 5.556
      font = Courier New
      letterHeight = 0.04
      pos = (-.4, -.3)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $button_duration
      text [set every repeat] = $trial_label_left_text
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  Routine prolificID
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Introduzca su Prolific ID a continuación
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    TextboxComponent prolific
      bold = False
      durationEstim = 5
      editable = False
      letterHeight = 0.05
      placeholder = Escriba aquí...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [condition] = 1.0
      text [set every frame] = Escriba a continuacion su ID de Prolific
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  Routine consentQ
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    TextComponent consentText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ¿Consientes formar parte de este experimento?

        Pulsa la tecla S para Sí o el botón Sí

        Pulsa la tecla N para No o el botón No
    KeyboardComponent consent_resp
      allowedKeys = 's','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      End JS Routine:
        if ((consent_resp.keys === "s")) {
          consent = 1;
        } else {
            if ((consent_resp.keys === "n")) {
                consent = 0;
            }
        }
      End Routine:
        if consent_resp.keys == "s"
            consent = 1
        elif consent_resp.keys == "n"
            consent = 0
    PolygonComponent button_yes
      fillColor = white
      lineColor = black
      pos = (-0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent button_no
      fillColor = white
      lineColor = black
      pos = (0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent responseQ
      clickable = button_yes, button_no
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_yes
      color = black
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      startVal [time (s)] = 0.0
      text = Sí
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    TextComponent text_no
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.3)
      startVal [time (s)] = 0.0
      text = No
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  Routine incompatiblemsg
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Gracias por considerar nuestro estudio.
        Lamentablemente no cumples los requisitos para participar.
        ¡Hasta pronto!
  Routine readingQ
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    TextComponent reading_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ¿Has tenido o tienes alguna dificultad en la lectura?

        Pulsa la tecla S para Sí o el botón Sí

        Pulsa la tecla N para No o el botón No
    KeyboardComponent reading_resp
      allowedKeys = 's','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Both
      End JS Routine:
        if ((reading_resp.keys === "n")) {
          reading = 1;
        } else {
            if ((reading_resp.keys === "s")) {
                reading = 0;
            }
        }
      End Routine:
        if reading_resp.keys == "n"
            reading = 1
        elif reading_resp.keys == "s"
            reading = 0
    PolygonComponent button_yes_4
      fillColor = white
      lineColor = black
      pos = (-0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent button_no_4
      fillColor = white
      lineColor = black
      pos = (0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent responseQ_4
      clickable = button_yes, button_no
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_yes_4
      color = black
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      startVal [time (s)] = 0.0
      text = Sí
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    TextComponent text_no_4
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.3)
      startVal [time (s)] = 0.0
      text = No
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  Routine languageQ
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    TextComponent language_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ¿El español es el idioma que más usas en tu día a día?

        Pulsa la tecla S para Sí o el botón Sí

        Pulsa la tecla N para No o el botón No
    KeyboardComponent language_resp
      allowedKeys = 's','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Both
      End JS Routine:
        if ((language_resp.keys === "s")) {
          language = 1;
        } else {
            if ((language_resp.keys === "n")) {
                language = 0;
            }
        }
      End Routine:
        if language_resp.keys == "s"
            language = 1
        elif language_resp.keys == "n"
            language = 0
    PolygonComponent button_yes_3
      fillColor = white
      lineColor = black
      pos = (-0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent button_no_3
      fillColor = white
      lineColor = black
      pos = (0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent responseQ_3
      clickable = button_yes, button_no
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_yes_3
      color = black
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      startVal [time (s)] = 0.0
      text = Sí
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    TextComponent text_no_3
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.3)
      startVal [time (s)] = 0.0
      text = No
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  Routine mothertongueQ
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    TextComponent mothertongue_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ¿Es el español tu lengua materna?

        Pulsa tecla S para Sí o pulsa el botón Sí

        Pulsa tecla N para No o pulsa el botón No
    KeyboardComponent mothertongue_resp
      allowedKeys = 's','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Both
      End JS Routine:
        if ((mothertongue_resp.keys === "s")) {
          motherTongue = 1;
        } else {
            if ((mothertongue_resp.keys === "n")) {
                motherTongue = 0;
            }
        }
      End Routine:
        if mothertongue_resp.keys == "s"
            motherTongue = 1
        elif mothertongue_resp.keys == "n"
            motherTongue = 0
    PolygonComponent button_yes_2
      fillColor = white
      lineColor = black
      pos = (-0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent button_no_2
      fillColor = white
      lineColor = black
      pos = (0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent responseQ_2
      clickable = button_yes, button_no
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_yes_2
      color = black
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      startVal [time (s)] = 0.0
      text = Sí
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    TextComponent text_no_2
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.3)
      startVal [time (s)] = 0.0
      text = No
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  Routine underageQ
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    TextComponent age_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ¿Tienes 18 años o más?

        Pulsa la tecla S para Sí o el botón Sí

        Pulsa la tecla N para No o el botón No
    KeyboardComponent age_resp
      allowedKeys = 's','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Both
      End JS Routine:
        if ((age_resp.keys === "s")) {
          age = 1;
        } else {
            if ((age_resp.keys === "n")) {
                age = 0;
            }
        }
      End Routine:
        if age_resp.keys == "s"
            age = 1
        elif age_resp.keys == "n"
            age = 0
    PolygonComponent button_yes_5
      fillColor = white
      lineColor = black
      pos = (-0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent button_no_5
      fillColor = white
      lineColor = black
      pos = (0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent responseQ_5
      clickable = button_yes, button_no
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_yes_5
      color = black
      letterHeight = 0.05
      pos = (-0.4, -0.3)
      startVal [time (s)] = 0.0
      text = Sí
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    TextComponent text_no_5
      color = black
      letterHeight = 0.05
      pos = (0.4, -0.3)
      startVal [time (s)] = 0.0
      text = No
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  Routine check_prescreening_answers
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    CodeComponent counterbalancing
      Code Type = JS
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      Begin JS Experiment:
        function assignGroup(participantID) {
            // Create a simple hash by summing the character codes of the participant ID
            let hash = 0;
            for (let i = 0; i < participantID.length; i++) {
                hash += participantID.charCodeAt(i);
            }

            // Use modulo to assign to one of eight groups (0, 1, 2, 3, 4, 5, 6, 7)
            let group = hash % 8;

            return group;
        }

        function getRandomInteger(min, max) {
          if (min > max) {
            throw new Error("Min value must be less than or equal to max value.");
          }

          min = Math.ceil(min);
          max = Math.floor(max);
          return Math.floor(Math.random() * (max - min + 1)) + min;
        }

        function getRandomIntegerFromList(integerList) {
          if (!Array.isArray(integerList) || integerList.length === 0) {
            return undefined; // Return undefined for invalid input
          }

          // Filter out non-integer values
          const validIntegers = integerList.filter(Number.isInteger);

          if (validIntegers.length === 0) {
            return undefined; // Return undefined if no integers are found
          }

          const randomIndex = Math.floor(Math.random() * validIntegers.length);
          return validIntegers[randomIndex];
        }



        // instead of using the hash, let's just use random variables
        // we already have a lot of condition 0, so just get values between 1 and 7
        full_counterbalancing_condition = 7; //getRandomIntegerFromList([4,6,7]);//getRandomInteger(1,7)//assignGroup(expInfo.PROLIFIC_PID);
        // counterbalance which key/side encodes feminine and which encodes masculine
        word_left = full_counterbalancing_condition < 4;
        // which file to use
        counterbalancing_condition = full_counterbalancing_condition % 4;
      Begin JS Routine:
        // select correct instructions depending on counterbalancing condition
        if (word_left) {
            instructions_file = "instructionsWN.xlsx";
        } else {
            instructions_file = "instructionsNW.xlsx";
        }
    CodeComponent check_answers
      Code Type = JS
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      End JS Routine:
        window.consent_prescreening = consent_prescreening; // Assuming this assignment is necessary

        //if (consent_prescreening._overallSurveyResults.language_disorder.includes('none') &&
        //    consent_prescreening._overallSurveyResults.first_language.includes('spanish')) {
        if (consent_prescreening._overallSurveyResults['block_1/language_disorder'].includes("none") &&
        consent_prescreening._overallSurveyResults['block_1/first_language'].includes("spanish")) {
            trialReps = 1;
            PrescreeningFailedMsgReps = 0;
        } else {
            trialReps = 0;
            PrescreeningFailedMsgReps = 1;
        }
  Routine prescreeningFailedMsg
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    TextComponent prescreeningFailedTxt
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Desafortunadamente, sus respuestas a las preguntas de selección no coinciden con las que dio en Prolific. Por favor, verifique nuevamente sus respuestas en Prolific para asegurarse de que es elegible para este estudio. Si cree que está viendo este mensaje por error, por favor contáctenos en Prolific.

        Presione cualquier tecla para salir del experimento.
    CodeComponent code_6
      Code Type = JS
      Begin JS Routine:
        console.log("starting no consent feedback routine");
      End JS Routine:
        psychoJS.setRedirectUrls("https://app.prolific.com/submissions/complete?cc=C46ZFGLN")
        quitPsychoJS("Terminando experimento.")
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent prescreening_failed_button
      fillColor = white
      lineColor = black
      pos = (0, -.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent prescreening_failed_button_label
      color = black
      font = Courier New
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Terminar
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    MouseComponent prescreening_failed_button_touch
      clickable = prescreening_failed_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  PavloviaSurveyRoutine consent_prescreening
    surveyId = 040f29f5-a49c-4629-a827-f84a9f267020
    surveyType = id
Flow
  PavloviaSurveyRoutine consent_prescreening
  Routine check_prescreening_answers
  LoopInitiator showTrialsLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = trialReps
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    LoopInitiator instruction_pages loopType="TrialHandler"
      conditionsFile = $instructions_file
      loopType = sequential
      nReps = 1
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      conditions:
        [{'pageN': 1, 'phase': 'instructions', 'instruct_text': 'INSTRUCCIONES\nAl comienzo de cada prueba, mire al centro de la pantalla. Al cabo de un momento, aparecerán palabras en pantalla. La tarea consiste en determinar si la palabra del centro (siempre será un sustantivo), pertenece al género masculino o femenino.\n\nPulse la tecla ESPACIO o toque el botón de abajo para continuar.', 'has_image': 0, 'instruct_image': 'keyboardresponse (2).png'},
        {'pageN': 2, 'phase': 'instructions', 'instruct_text': 'Si tu dispositivo tiene teclado, pulsa la tecla "A" para las palabras en femenino (por ejemplo: "mesa") y la tecla "L" para las palabras en masculino(por ejemplo: "arroz").\n\n\n\n\n\n\nPulsa la tecla ESPACIO o toca el botón de abajo para continuar.', 'has_image': 1, 'instruct_image': 'keyboardresponse (2).png'},
        {'pageN': 3, 'phase': 'instructions', 'instruct_text': 'Si utiliza un dispositivo sólo táctil, colóquelo en horizontal y utilice los botones de la pantalla. No utilice el ratón.\n\n\n\n\n\nPulsa la tecla ESPACIO o toca el botón de abajo para continuar.', 'has_image': 2, 'instruct_image': 'touchscreen.png'},
        {'pageN': 4, 'phase': 'instructions', 'instruct_text': 'Es muy importante que responda con la mayor rapidez y precisión posibles, ya que cada cadena de letras sólo estará en pantalla durante un instante. Si no responde en ese tiempo, aparecerá el mensaje "Muy lento" y el experimento pasará a la siguiente palabra. Los primeros 15 intentos serán de práctica y recibirá información sobre si sus respuestas son correctas o incorrectas.\n\nPulsa la tecla ESPACIO o toca el botón de abajo para iniciar la parte de práctica.', 'has_image': 0, 'instruct_image': 'keyboardresponse (2).png'}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
      Routine Instructions
    LoopTerminator instruction_pages
    LoopInitiator practice_trials loopType="TrialHandler"
      conditionsFile = genderflanker_practice.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'TrialID': 2001, 'StimulusType': 'FEM', 'Condition': 'AGR', 'PrimeDuration': 150, 'Prime': 'nuca', 'Flanker': 'la', 'corrAns': 'a'},
        {'TrialID': 2002, 'StimulusType': 'FEM', 'Condition': 'CON', 'PrimeDuration': 150, 'Prime': 'pala', 'Flanker': None, 'corrAns': 'a'},
        {'TrialID': 2003, 'StimulusType': 'FEM', 'Condition': 'DIS', 'PrimeDuration': 150, 'Prime': 'daga', 'Flanker': 'el', 'corrAns': 'a'},
        {'TrialID': 2004, 'StimulusType': 'FEM', 'Condition': 'AGR', 'PrimeDuration': 150, 'Prime': 'venta', 'Flanker': 'la', 'corrAns': 'a'},
        {'TrialID': 2005, 'StimulusType': 'FEM', 'Condition': 'CON', 'PrimeDuration': 150, 'Prime': 'placa', 'Flanker': None, 'corrAns': 'a'},
        {'TrialID': 2006, 'StimulusType': 'FEM', 'Condition': 'DIS', 'PrimeDuration': 150, 'Prime': 'serie', 'Flanker': 'el', 'corrAns': 'a'},
        {'TrialID': 2007, 'StimulusType': 'FEM', 'Condition': 'AGR', 'PrimeDuration': 150, 'Prime': 'navaja', 'Flanker': 'la', 'corrAns': 'a'},
        {'TrialID': 2008, 'StimulusType': 'FEM', 'Condition': 'CON', 'PrimeDuration': 150, 'Prime': 'siesta', 'Flanker': None, 'corrAns': 'a'},
        {'TrialID': 2009, 'StimulusType': 'MAS', 'Condition': 'DIS', 'PrimeDuration': 150, 'Prime': 'puerto', 'Flanker': 'la', 'corrAns': 'l'},
        {'TrialID': 2010, 'StimulusType': 'MAS', 'Condition': 'AGR', 'PrimeDuration': 150, 'Prime': 'vecino', 'Flanker': 'el', 'corrAns': 'l'},
        {'TrialID': 2011, 'StimulusType': 'MAS', 'Condition': 'CON', 'PrimeDuration': 150, 'Prime': 'canal', 'Flanker': None, 'corrAns': 'l'}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
      Routine presentTrial
      Routine feedback
    LoopTerminator practice_trials
    LoopInitiator end_of_practice_trials_pages loopType="TrialHandler"
      conditions = [{'pageN': 1, 'phase': 'end_of_practice', 'instruct_text': 'Ha completado la parte de práctica. Ahora da comienzo el experimento, es muy importante que responda con la mayor rapidez y precisión posibles. \nAntes de empezar, asegúrese de que se encuentra en un lugar cómodo y tranquilo y de que no se le molestará durante unos 15 minutos, ya que no podremos utilizar sus datos si no completa todos los ensayos. \nTendrá la oportunidad de hacer pausas a intervalos regulares durante el experimento. Cuando esté listo/a para iniciar la tarea, pulse la barra espaciadora o toque el botón que aparece a co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
      conditionsFile = instructions_after_practice.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine Instructions
    LoopTerminator end_of_practice_trials_pages
    LoopInitiator experiment_trials loopType="TrialHandler"
      conditionsFile = $trial_list_file
      loopType = random
      nReps = 1
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      Routine presentTrial
      Routine feedback
      Routine Break
    LoopTerminator experiment_trials
    Routine End
  LoopTerminator showTrialsLoop
  LoopInitiator showPrescreeningFailedMsg loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = PrescreeningFailedMsgReps
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    Routine prescreeningFailedMsg
  LoopTerminator showPrescreeningFailedMsg
